CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|.
    Check image sets for missing or duplicate files?:
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):16604_16602TA_KO10x01
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Original_Image
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    Rescale intensities?:Yes

ImageMath:[module_num:2|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:Inverted4Area
    Image or measurement?:Image
    Select the first image:Original_Image
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
CorrectIlluminationCalculate:[module_num:3|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
    Select the input image:Original_Image
    Name the output image:IllumFunc
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Object size
    Approximate object size:10
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    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:Yes
    Name the averaged image:Do not save
    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:Yes
    Name the dilated image:Do not save
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
CorrectIlluminationApply:[module_num:4|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
    Select the input image:Original_Image
    Name the output image:Corrected_Original
    Select the illumination function:IllumFunc
    Select how the illumination function is applied:Divide

ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:InvertedGray
    Image or measurement?:Image
    Select the first image:Corrected_Original
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MeasureImageAreaOccupied:[module_num:6|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:InvertedGray
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):4,35
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
GrayToColor:[module_num:8|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
    Select a color scheme:CMYK
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    Name the output image:ColorImage
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    Relative weight for the cyan image:1
    Relative weight for the magenta image:1
    Relative weight for the yellow image:1
    Relative weight for the brightness image:1
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OverlaidOriginal
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:NucOutlines
    Select outline color:Green

DisplayDataOnImage:[module_num:10|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
    Display object or image measurements?:Object
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    Measurement to display:None
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    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image

DisplayDataOnImage:[module_num:11|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
    Display object or image measurements?:Object
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    Measurement to display:None
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    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
