CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:original
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    Rescale intensities?:Yes

UnmixColors:[module_num:2|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
    Stain count:2
    Color image:original
    Image name:Hematoxylin
    Stain:Hematoxylin
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    Image name:Eosin
    Stain:Eosin
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
Smooth:[module_num:3|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
    Select the input image:Hematoxylin
    Name the output image:blur1
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:8
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
RescaleIntensity:[module_num:4|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
    Select the input image:blur1
    Name the output image:hematoxylin_rescaled
    Select rescaling method:Choose specific values to be reset to the full intensity range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.34,0.48
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    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:0
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:0
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
Smooth:[module_num:5|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
    Select the input image:hematoxylin_rescaled
    Name the output image:blur2
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:8
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:blur2
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,90
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:RobustBackground Adaptive
    Threshold correction factor:.8
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
SaveImages:[module_num:7|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
    Select the type of image to save:Objects
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    Select the objects to save:Nuclei
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    Select method for constructing file names:From image filename
    Select image name for file prefix:original
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    Do you want to add a suffix to the image file name?:No
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    Select file format to use:tif
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
    Select colormap:Spectral
    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No
